#==========================================================================================
# ABOUT THIS MACRO
# Description: In this file you add physics process to simulation
# More informations about processes: 
# http://wiki.opengatecollaboration.org/index.php/Users_Guide:Setting_up_the_physics
# Author: Mateusz Bała
# E-mail: bala.mateusz@gmail.com
#==========================================================================================

#==========================================================================================
# Compton scattering for gamma
#==========================================================================================

/gate/physics/addProcess Compton gamma
/gate/physics/processes/Compton/setModel LivermorePolarizedModel #StandardModel

#==========================================================================================
# Electron ionisation for e- (for e+ is possible too)
#==========================================================================================

/gate/physics/addProcess ElectronIonisation e-
/gate/physics/processes/ElectronIonisation/setModel StandardModel

#==========================================================================================
# Initialisation of physics
#==========================================================================================

/gate/physics/processList Enabled
/gate/physics/processList Initialized
